def model mitochondria as

  def comp Environment as
    var t: millisecond {pub: out};
  enddef;

  def comp ATPi as
    var ATPi: micromolar {init: 9607.15, pub: out};
    var V_ANT: micromole_per_second_per_l_mito {pub: in};
    var v_MiCK: micromole_per_second_per_l_mito {pub: in};
    var V_AKi: micromole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var time: millisecond {pub: in};
    ode(ATPi, time) = (V_ANT/W_i-v_MiCK/W_i+V_AKi/W_i)/1000{dimensionless};
  enddef;

  def comp ADPi as
    var ADPi: micromolar {init: 112.217, pub: out};
    var v_MiCK: micromole_per_second_per_l_mito {pub: in};
    var V_ANT: micromole_per_second_per_l_mito {pub: in};
    var V_AKi: micromole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var time: millisecond {pub: in};
    ode(ADPi, time) = (-(2.0{dimensionless}*V_AKi/W_i+V_ANT/W_i)+v_MiCK/W_i)/1000{dimensionless};
  enddef;

  def comp AMPi as
    var AMPi: micromolar {init: 17.8491, pub: out};
    var V_AKi: micromole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var time: millisecond {pub: in};
    ode(AMPi, time) = V_AKi/W_i/1000{dimensionless};
  enddef;

  def comp PCri as
    var PCri: micromolar {init: 12000, pub: out};
    var v_MiCK: micromole_per_second_per_l_mito {pub: in};
    var time: millisecond {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    ode(PCri, time) = v_MiCK/W_i/1000{dimensionless};
  enddef;

  def comp Cri as
    var Cri: micromolar {init: 12000, pub: out};
    var v_MiCK: micromole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var time: millisecond {pub: in};
    ode(Cri, time) = -v_MiCK/W_i/1000{dimensionless};
  enddef;

  def comp Pii as
    var Pii: micromolar {init: 2328.17, pub: out};
    var V_Pi1: micromole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var time: millisecond {pub: in};
    ode(Pii, time) = -V_Pi1/W_i/1000{dimensionless};
  enddef;

  def comp v_MiCK as
    var v_MiCK: micromole_per_second_per_l_mito {pub: out};
    var V1: micromole_per_second_per_l_mito {init: 8.2012E3};
    var V11: micromole_per_second_per_l_mito {init: 3.4452E4};
    var Kia_G: micromolar {init: 7.12E2};
    var Kia: micromolar {init: 1.61E2};
    var Kic_G: micromolar {init: 1.42E2};
    var Kic: micromolar {init: 1.10E4};
    var Kd: micromolar {init: 5.0E2};
    var Kb: micromolar {init: 5.2E3};
    var DenMiCK: dimensionless;
    var Kib: micromolar {init: 2.6E4};
    var Kid: micromolar {init: 1.6E3};
    var KIb: micromolar {init: 2.6E4};
    var PCri: micromolar {pub: in};
    var Cri: micromolar {pub: in};
    var mATPi: micromolar {pub: in};
    var mADPi: micromolar {pub: in};
    v_MiCK = (V1*mATPi*Cri/(Kia*Kb)-V11*mADPi*PCri/(Kic*Kd))/DenMiCK;
    DenMiCK = 1.0{dimensionless}+Cri/Kib+PCri/Kid+(mATPi/Kia_G+mATPi/Kia)*(1.0{dimensionless}+Cri/Kb)+(mADPi/Kic_G+mADPi/Kic)*(1.0{dimensionless}+PCri/Kd+Cri/KIb);
  enddef;

  def comp fADPi as
    var fADPi: micromolar {pub: out};
    var KDDi: micromolar {init: 282.0};
    var ADPi: micromolar {pub: in};
    var Mgi: micromolar {pub: in};
    fADPi = ADPi/(1.0{dimensionless}+Mgi/KDDi);
  enddef;

  def comp fATPi as
    var fATPi: micromolar {pub: out};
    var KDTi: micromolar {init: 17.0};
    var ATPi: micromolar {pub: in};
    var Mgi: micromolar {pub: in};
    fATPi = ATPi/(1.0{dimensionless}+Mgi/KDTi);
  enddef;

  def comp mATPi as
    var mATPi: micromolar {pub: out};
    var ATPi: micromolar {pub: in};
    var fATPi: micromolar {pub: in};
    mATPi = ATPi-fATPi;
  enddef;

  def comp mADPi as
    var mADPi: micromolar {pub: out};
    var ADPi: micromolar {pub: in};
    var fADPi: micromolar {pub: in};
    mADPi = ADPi-fADPi;
  enddef;

  def comp general_constants as
    var R: kilojoule_per_mole_kelvin {init: 0.0083, pub: out};
    var T: kelvin {init: 298.0, pub: out};
    var F: kilojoule_per_mole_millivolt {init: 0.0965, pub: out};
    var u: dimensionless {init: 0.861, pub: out};
    var eta: dimensionless {init: 10E6, pub: out};
    var na: dimensionless {init: 2.5, pub: out};
    var param: dimensionless {init: 20, pub: out};
  enddef;

  def comp Fixed_parameters as
    var RT: kilojoule_per_mole {init: 2.4734, pub: out};
    var F: kilojoule_per_mole_per_millivolt {init: 0.096484, pub: out};
    var n_A: dimensionless {init: 3, pub: out};
    var dG_C1o: kilojoule_per_mole {init: -69.37, pub: out};
    var dG_C3o: kilojoule_per_mole {init: -32.53, pub: out};
    var dG_C4o: kilojoule_per_mole {init: -122.94, pub: out};
    var dG_F1o: kilojoule_per_mole {init: 36.03, pub: out};
    var pH_e: dimensionless {init: 7.1, pub: out};
    var H_e: micromolar {pub: out};
    var K_e: micromolar {init: 0.15e6, pub: out};
    var ATP_e: micromolar {init: 0, pub: out};
    var AMP_e: micromolar {init: 0, pub: out};
    var k_dHPi: micromolar {pub: out};
    var k_dHatp: micromolar {pub: out};
    var k_dHadp: micromolar {pub: out};
    var K_DT: micromolar {init: 2.4e1, pub: out};
    var K_DD: micromolar {init: 3.47e2, pub: out};
    var K_AK: dimensionless {init: 0.4331, pub: out};
    var W_m: l_water_per_l_mito {init: 0.72376, pub: out};
    var W_x: l_water_per_l_mito {pub: out};
    var W_i: l_water_per_l_mito {pub: out};
    var gamma: per_micron {init: 5.99, pub: out};
    var Ctot: micromolar {init: 0.0027e6, pub: out};
    var Qtot: micromolar {init: 0.00135e6, pub: out};
    var NADtot: micromolar {init: 0.00297e6, pub: out};
    var H_i: micromolar {pub: out};
    var K_i: micromolar {pub: out};
    H_e = 1e6{micromolar}*pow(10{dimensionless}, -pH_e);
    W_x = 9{dimensionless}/10{dimensionless}*W_m;
    W_i = 1{dimensionless}/10{dimensionless}*W_m;
    H_i = H_e;
    K_i = K_e;
    k_dHPi = 1e6{micromolar}*pow(10{dimensionless}, -6.75{dimensionless});
    k_dHatp = 1e6{micromolar}*pow(10{dimensionless}, -6.48{dimensionless});
    k_dHadp = 1e6{micromolar}*pow(10{dimensionless}, -6.29{dimensionless});
  enddef;

  def comp Adjustable_parameters as
    var k_Pi1: micromolar {init: 1.3413e2, pub: out};
    var k_Pi2: micromolar {init: 6.7668e2, pub: out};
    var k_Pi3: micromolar {init: 1.9172e2, pub: out};
    var k_Pi4: micromolar {init: 0.02531e6, pub: out};
    var k_PiH: micromolar {init: 4.5082e2, pub: out};
    var r: dimensionless {init: 4.5807, pub: out};
    var x_DH: micromole_per_second_per_l_mito_per_micromolar {init: 0.09183, pub: out};
    var x_C1: micromole_per_second_per_l_mito_per_micromolar {init: 0.36923, pub: out};
    var x_C3: micromole_per_second_per_l_mito_per_micromolar {init: 0.091737, pub: out};
    var x_C4: micromole_per_second_per_l_mito_per_micromolar {init: 3.2562e-5, pub: out};
    var x_F1: micromole_per_second_per_l_mito_per_micromolar_per_micromolar {init: 150.93e-6, pub: out};
    var x_ANT: micromole_per_second_per_l_mito {init: 0.0079204e6, pub: out};
    var x_Pi1: micromole_per_second_per_l_mito_per_micromolar {init: 339430, pub: out};
    var x_KH: micromole_per_second_per_l_mito_per_micromolar_per_micromolar {init: 2.9802e1, pub: out};
    var x_Hle: micromole_per_second_per_l_mito_per_micromolar_per_millivolt {init: 250, pub: out};
    var x_K: micromole_per_second_per_l_mito_per_micromolar_per_millivolt {init: 0, pub: out};
    var k_mADP: micromolar {init: 3.5e0, pub: out};
    var x_AK: micromole_per_second_per_l_mito_per_micromolar_per_micromolar {init: 0, pub: out};
    var p_A: micron_per_second {init: 85, pub: out};
    var k_O2: micromolar {init: 1.2e2, pub: out};
    var x_buff: per_micromolar {init: 100e-6, pub: out};
    var x_Pi2: micron_per_second {init: 327, pub: out};
  enddef;

  def comp Proton_motive_force as
    var dG_H: kilojoule_per_mole {pub: out};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var H_i: micromolar {pub: in};
    var H_x: micromolar {pub: in};
    dG_H = F*dPsi+RT*ln(H_i/H_x);
  enddef;

  def comp Dehydrogenase_flux as
    var V_DH: micromole_per_second_per_l_mito {pub: out};
    var x_DH: micromole_per_second_per_l_mito_per_micromolar {pub: in};
    var k_Pi1: micromolar {pub: in};
    var k_Pi2: micromolar {pub: in};
    var r: dimensionless {pub: in};
    var NAD_x: micromolar {pub: in};
    var NADH_x: micromolar {pub: in};
    var Pi_x: micromolar {pub: in};
    V_DH = x_DH*(r*NAD_x-NADH_x)*(1{dimensionless}+Pi_x/k_Pi1)/(1{dimensionless}+Pi_x/k_Pi2);
  enddef;

  def comp Electron_flux_complex_I as
    var V_C1: micromole_per_second_per_l_mito {pub: out};
    var x_C1: micromole_per_second_per_l_mito_per_micromolar {pub: in};
    var dG_C1op: kilojoule_per_mole;
    var dG_C1o: kilojoule_per_mole {pub: in};
    var NADH_x: micromolar {pub: in};
    var NAD_x: micromolar {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var Q: micromolar {pub: in};
    var QH2: micromolar {pub: in};
    var H_x: micromolar {pub: in};
    dG_C1op = dG_C1o-RT*ln(H_x*10{per_micromolar})-RT*ln(Q/QH2);
    V_C1 = x_C1*(exp(-(dG_C1op+4{dimensionless}*dG_H)/RT)*NADH_x-NAD_x);
  enddef;

  def comp Electron_flux_complex_III as
    var V_C3: micromole_per_second_per_l_mito {pub: out};
    var k_Pi3: micromolar {pub: in};
    var k_Pi4: micromolar {pub: in};
    var x_C3: micromole_per_second_per_l_mito_per_micromolar {pub: in};
    var dG_C3op: kilojoule_per_mole;
    var dG_C3o: kilojoule_per_mole {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var Cox: micromolar {pub: in};
    var Cred: micromolar {pub: in};
    var Q: micromolar {pub: in};
    var QH2: micromolar {pub: in};
    var H_x: micromolar {pub: in};
    var Pi_x: micromolar {pub: in};
    dG_C3op = dG_C3o+2{dimensionless}*RT*ln(H_x*10{per_micromolar})-RT*ln(QH2/Q);
    V_C3 = x_C3*(1{dimensionless}+Pi_x/k_Pi3)/(1{dimensionless}+Pi_x/k_Pi4)*(exp(-(dG_C3op+4{dimensionless}*dG_H-2{dimensionless}*F*dPsi)/(2{dimensionless}*RT))*Cox-Cred);
  enddef;

  def comp Electron_flux_complex_IV as
    var V_C4: micromole_per_second_per_l_mito {pub: out};
    var k_O2: micromolar {pub: in};
    var x_C4: micromole_per_second_per_l_mito_per_micromolar {pub: in};
    var dG_C4op: kilojoule_per_mole;
    var dG_C4o: kilojoule_per_mole {pub: in};
    var Cred: micromolar {pub: in};
    var Ctot: micromolar {pub: in};
    var O2: micromolar {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var Cox: micromolar {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var H_x: micromolar {pub: in};
    dG_C4op = dG_C4o-2{dimensionless}*RT*ln(H_x*10{per_micromolar})-RT/2{dimensionless}*ln(O2/1e6{micromolar});
    V_C4 = x_C4/(1{dimensionless}+k_O2/O2)*Cred/Ctot*(exp(-(dG_C4op+2{dimensionless}*dG_H)/(2{dimensionless}*RT))*Cred-Cox*exp(F*dPsi/RT));
  enddef;

  def comp ATP_synthesis_flux as
    var V_F1: micromole_per_second_per_l_mito {pub: out};
    var x_F1: micromole_per_second_per_l_mito_per_micromolar_per_micromolar {pub: in};
    var dG_F1o: kilojoule_per_mole {pub: in};
    var K_DD: micromolar {pub: in};
    var K_DT: micromolar {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var n_A: dimensionless {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    var ADP_mx: micromolar {pub: in};
    var Pi_x: micromolar {pub: in};
    var ATP_mx: micromolar {pub: in};
    var V_F1_micro: micromole_per_second_per_l_mito;
    V_F1 = x_F1*(exp(-(dG_F1o-n_A*dG_H)/RT)*K_DD/K_DT*ADP_mx*Pi_x-ATP_mx*1e6{molar});
    V_F1_micro = V_F1;
  enddef;
  def map between ATP_synthesis_flux and ANT_flux for
    vars V_F1 and V_F1;
  enddef;

  def comp ANT_flux as
    var V_F1: micromole_per_second_per_l_mito {pub: in};
    var V_ANT: micromole_per_second_per_l_mito {pub: out};
    var Psi_x: millivolt {pub: out};
    var Psi_i: millivolt {pub: out};
    var x_ANT: micromole_per_second_per_l_mito {pub: in};
    var ADP_fi: micromolar {pub: in};
    var ATP_fi: micromolar {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var dPsi: millivolt {pub: in};
    var ADP_fx: micromolar {pub: in};
    var ATP_fx: micromolar {pub: in};
    var k_mADP: micromolar {pub: in};
    var mincond: micromolar {init: 1e-6};
    Psi_x = -0.65{dimensionless}*dPsi;
    Psi_i = 0.35{dimensionless}*dPsi;
    V_ANT = sel
      case ADP_fi > mincond:
        x_ANT*(ADP_fi/(ADP_fi+ATP_fi*exp(-F*Psi_i/RT))-ADP_fx/(ADP_fx+ATP_fx*exp(-F*Psi_x/RT)))*ADP_fi/(k_mADP+ADP_fi);
      case ATP_fi > mincond:
        x_ANT*(ADP_fi/(ADP_fi+ATP_fi*exp(-F*Psi_i/RT))-ADP_fx/(ADP_fx+ATP_fx*exp(-F*Psi_x/RT)))*ADP_fi/(k_mADP+ADP_fi);
      otherwise:
        0{mole_per_second_per_l_mito};
    endsel;
  enddef;

  def comp Phosphate_hydrogen_cotransporter_flux as
    var V_Pi1: micromole_per_second_per_l_mito {pub: out};
    var H2PIi: micromolar {pub: out};
    var H2PIx: micromolar {pub: out};
    var Pii: micromolar {pub: in};
    var H_i: micromolar {pub: in};
    var k_dHPi: micromolar {pub: in};
    var Pi_x: micromolar {pub: in};
    var H_x: micromolar {pub: in};
    var x_Pi1: micromole_per_second_per_l_mito_per_micromolar {pub: in};
    var k_PiH: micromolar {pub: in};
    H2PIi = Pii*H_i/(H_i+k_dHPi);
    H2PIx = Pi_x*H_x/(H_x+k_dHPi);
    V_Pi1 = x_Pi1*(H_x*H2PIi-H_i*H2PIx)/(H2PIi+k_PiH);
  enddef;

  def comp Adenylate_kinase_flux as
    var V_AKi: micromole_per_second_per_l_mito {pub: out};
    var x_AK: micromole_per_second_per_l_mito_per_micromolar_per_micromolar {pub: in};
    var K_AK: dimensionless {pub: in};
    var ADPi: micromolar {pub: in};
    var AMPi: micromolar {pub: in};
    var ATPi: micromolar {pub: in};
    V_AKi = x_AK*(K_AK*ADPi*ADPi-AMPi*ATPi);
  enddef;

  def comp Hydrogen_leak_flux as
    var V_Hle: micromole_per_second_per_l_mito {pub: out};
    var x_Hle: micromole_per_second_per_l_mito_per_micromolar_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var H_i: micromolar {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var H_x: micromolar {pub: in};
    V_Hle = x_Hle*dPsi*(H_i*exp(F*dPsi/RT)-H_x)/(exp(F*dPsi/RT)-1{dimensionless});
  enddef;

  def comp Passive_potassium_flux as
    var V_K: micromole_per_second_per_l_mito {pub: out};
    var x_K: micromole_per_second_per_l_mito_per_micromolar_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var K_i: micromolar {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var K_x: micromolar {pub: in};
    V_K = x_K*dPsi*(K_i*exp(F*dPsi/RT)-K_x)/(exp(F*dPsi/RT)-1{dimensionless});
  enddef;

  def comp Potassium_hydrogen_flux as
    var V_KH: micromole_per_second_per_l_mito {pub: out};
    var x_KH: micromole_per_second_per_l_mito_per_micromolar_per_micromolar {pub: in};
    var K_i: micromolar {pub: in};
    var K_x: micromolar {pub: in};
    var H_i: micromolar {pub: in};
    var H_x: micromolar {pub: in};
    V_KH = x_KH*(K_i*H_x-K_x*H_i);
  enddef;

  def comp NAD_x_concentration as
    var NAD_x: micromolar {pub: out};
    var NADH_x: micromolar {pub: in};
    var NADtot: micromolar {pub: in};
    NAD_x = NADtot-NADH_x;
  enddef;

  def comp Q_concentration as
    var Q: micromolar {pub: out};
    var Qtot: micromolar {pub: in};
    var QH2: micromolar {pub: in};
    Q = Qtot-QH2;
  enddef;

  def comp Cox_concentration as
    var Cox: micromolar {pub: out};
    var Ctot: micromolar {pub: in};
    var Cred: micromolar {pub: in};
    Cox = Ctot-Cred;
  enddef;

  def comp dH_x_dt as
    var H_x: micromolar {init: 0.0724323, pub: out};
    var x_buff: per_micromolar {pub: in};
    var V_DH: micromole_per_second_per_l_mito {pub: in};
    var V_C1: micromole_per_second_per_l_mito {pub: in};
    var V_C3: micromole_per_second_per_l_mito {pub: in};
    var V_C4: micromole_per_second_per_l_mito {pub: in};
    var n_A: dimensionless {pub: in};
    var V_F1: micromole_per_second_per_l_mito {pub: in};
    var V_Pi1: micromole_per_second_per_l_mito {pub: in};
    var V_Hle: micromole_per_second_per_l_mito {pub: in};
    var V_KH: micromole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    ode(H_x, t) = x_buff*H_x*(V_DH-5{dimensionless}*V_C1-2{dimensionless}*V_C3-4{dimensionless}*V_C4+(n_A-1{dimensionless})*V_F1+2{dimensionless}*V_Pi1+V_Hle-V_KH)/(W_x*1000{dimensionless});
  enddef;

  def comp dK_x_dt as
    var K_x: micromolar {init: 0.137087e6, pub: out};
    var V_KH: micromole_per_second_per_l_mito {pub: in};
    var V_K: micromole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    ode(K_x, t) = (V_KH+V_K)/(W_x*1000{dimensionless});
  enddef;

  def comp dNADH_x_dt as
    var NADH_x: micromolar {init: 0.00154986e6, pub: out};
    var V_DH: micromole_per_second_per_l_mito {pub: in};
    var V_C1: micromole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    ode(NADH_x, t) = (V_DH-V_C1)/(W_x*1000{dimensionless});
  enddef;

  def comp dQH2_dt as
    var QH2: micromolar {init: 0.000599417e6, pub: out};
    var V_C1: micromole_per_second_per_l_mito {pub: in};
    var V_C3: micromole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    ode(QH2, t) = (V_C1-V_C3)/(W_x*1000{dimensionless});
  enddef;

  def comp dCred_dt as
    var Cred: micromolar {init: 0.000438911e6, pub: out};
    var V_C3: micromole_per_second_per_l_mito {pub: in};
    var V_C4: micromole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    ode(Cred, t) = (2{dimensionless}*V_C3-2{dimensionless}*V_C4)/(W_i*1000{dimensionless});
  enddef;

  def comp dATP_x_dt as
    var ATP_x: micromolar {init: 0.009e6, pub: out};
    var V_F1: micromole_per_second_per_l_mito {pub: in};
    var V_ANT: micromole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    var ATP_xx: micromolar {pub: out};
    ATP_xx = ATP_x;
    ode(ATP_x, t) = (V_F1-V_ANT)/(W_x*1000{dimensionless});
  enddef;

  def comp dADP_x_dt as
    var ADP_x: micromolar {init: 0.001e6, pub: out};
    var V_F1: micromole_per_second_per_l_mito {pub: in};
    var V_ANT: micromole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    ode(ADP_x, t) = (-V_F1+V_ANT)/(W_x*1000{dimensionless});
  enddef;

  def comp dPi_x_dt as
    var Pi_x: micromolar {init: 0.0020e6, pub: out};
    var V_F1: micromole_per_second_per_l_mito {pub: in};
    var V_Pi1: micromole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    ode(Pi_x, t) = (-V_F1+V_Pi1)/(W_x*1000{dimensionless});
  enddef;

  def comp dPsi_dt as
    var dPsi: millivolt {init: 167.954, pub: out};
    var V_C1: micromole_per_second_per_l_mito {pub: in};
    var V_C3: micromole_per_second_per_l_mito {pub: in};
    var V_C4: micromole_per_second_per_l_mito {pub: in};
    var n_A: dimensionless {pub: in};
    var V_F1: micromole_per_second_per_l_mito {pub: in};
    var V_ANT: micromole_per_second_per_l_mito {pub: in};
    var V_Hle: micromole_per_second_per_l_mito {pub: in};
    var V_K: micromole_per_second_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    var C_im: mole_per_l_mito_per_millivolt {init: 6.756756756756757};
    ode(dPsi, t) = (4{dimensionless}*V_C1+2{dimensionless}*V_C3+4{dimensionless}*V_C4-n_A*V_F1-V_ANT-V_Hle-V_K)/(C_im*1000{dimensionless});
  enddef;

  def comp dO2_dt as
    var O2: micromolar {init: 2.6e1, pub: out};
    var t: millisecond {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var V_VO2: micromole_per_second_per_l_mito;
    var V_C4: micromole_per_second_per_l_mito {pub: in};
    V_VO2 = V_C4/2{dimensionless}*1.325{dimensionless}*0.06{dimensionless}/0.72376{dimensionless};
    ode(O2, t) = -V_C4/(2{dimensionless}*1000{dimensionless}*W_i);
    // ode(O2, t) = 0{dimensionless};
  enddef;

  def comp fATPx as
    var fATPx: micromolar {pub: out};
    var KDTx: micromolar {init: 17.0};
    var ATPx: micromolar {pub: in};
    var Mgx: micromolar {pub: in};
    fATPx = ATPx/(1.0{dimensionless}+Mgx/KDTx);
  enddef;

  def comp mATPx as
    var ATP_mx: micromolar {pub: out};
    var ATPx: micromolar {pub: in};
    var fATPx: micromolar {pub: in};
    ATP_mx = ATPx-fATPx;
  enddef;

  def comp mADPx as
    var ADP_mx: micromolar {pub: out};
    var ADPx: micromolar {pub: in};
    var fADPx: micromolar {pub: in};
    ADP_mx = ADPx-fADPx;
  enddef;

  def comp fADPx as
    var fADPx: micromolar {pub: out};
    var KDDx: micromolar {init: 282.0};
    var ADPx: micromolar {pub: in};
    var Mgx: micromolar {pub: in};
    fADPx = ADPx/(1.0{dimensionless}+Mgx/KDDx);
  enddef;

  def comp Mg_buffering as
    var Mgi: micromolar {init: 380.0, pub: out};
    var Mgext: micromolar {init: 1.0E3, pub: out};
    var Mgx: micromolar {init: 380.0, pub: out};
  enddef;
  def map between fATPx and dATP_x_dt for
    vars ATPx and ATP_x;
  enddef;
  def map between fATPx and Mg_buffering for
    vars Mgx and Mgx;
  enddef;
  def map between ATPi and ANT_flux for
    vars V_ANT and V_ANT;
  enddef;
  def map between ATPi and v_MiCK for
    vars v_MiCK and v_MiCK;
  enddef;
  def map between ATPi and Fixed_parameters for
    vars W_i and W_i;
  enddef;
  def map between ADPi and v_MiCK for
    vars v_MiCK and v_MiCK;
  enddef;
  def map between ADPi and Fixed_parameters for
    vars W_i and W_i;
  enddef;
  def map between AMPi and Fixed_parameters for
    vars W_i and W_i;
  enddef;
  def map between PCri and Fixed_parameters for
    vars W_i and W_i;
  enddef;
  def map between Cri and Fixed_parameters for
    vars W_i and W_i;
  enddef;
  def map between Pii and Fixed_parameters for
    vars W_i and W_i;
  enddef;
  def map between v_MiCK and PCri for
    vars PCri and PCri;
    vars v_MiCK and v_MiCK;
  enddef;
  def map between v_MiCK and Cri for
    vars Cri and Cri;
    vars v_MiCK and v_MiCK;
  enddef;
  def map between v_MiCK and mATPi for
    vars mATPi and mATPi;
  enddef;
  def map between v_MiCK and mADPi for
    vars mADPi and mADPi;
  enddef;
  def map between fATPi and ATPi for
    vars ATPi and ATPi;
  enddef;
  def map between fATPi and Mg_buffering for
    vars Mgi and Mgi;
  enddef;
  def map between mATPi and fATPi for
    vars fATPi and fATPi;
  enddef;
  def map between mATPi and ATPi for
    vars ATPi and ATPi;
  enddef;
  def map between fADPi and ADPi for
    vars ADPi and ADPi;
  enddef;
  def map between fADPi and Mg_buffering for
    vars Mgi and Mgi;
  enddef;
  def map between mADPi and fADPi for
    vars fADPi and fADPi;
  enddef;
  def map between mADPi and ADPi for
    vars ADPi and ADPi;
  enddef;
  def map between Environment and ATPi for
    vars t and time;
  enddef;
  def map between Environment and ADPi for
    vars t and time;
  enddef;
  def map between Environment and AMPi for
    vars t and time;
  enddef;
  def map between Environment and PCri for
    vars t and time;
  enddef;
  def map between Environment and Cri for
    vars t and time;
  enddef;
  def map between Environment and Pii for
    vars t and time;
  enddef;
  def map between mATPx and fATPx for
    vars fATPx and fATPx;
  enddef;
  def map between mATPx and dATP_x_dt for
    vars ATPx and ATP_x;
  enddef;
  def map between mADPx and fADPx for
    vars fADPx and fADPx;
  enddef;
  def map between mADPx and dADP_x_dt for
    vars ADPx and ADP_x;
  enddef;
  def map between fADPx and dADP_x_dt for
    vars ADPx and ADP_x;
  enddef;
  def map between fADPx and Mg_buffering for
    vars Mgx and Mgx;
  enddef;
  def map between Fixed_parameters and Proton_motive_force for
    vars F and F;
    vars RT and RT;
    vars H_i and H_i;
  enddef;
  def map between dPsi_dt and Proton_motive_force for
    vars dPsi and dPsi;
  enddef;
  def map between dH_x_dt and Proton_motive_force for
    vars H_x and H_x;
  enddef;
  def map between Fixed_parameters and Electron_flux_complex_I for
    vars dG_C1o and dG_C1o;
    vars RT and RT;
  enddef;
  def map between Adjustable_parameters and Electron_flux_complex_I for
    vars x_C1 and x_C1;
  enddef;
  def map between Q_concentration and Electron_flux_complex_I for
    vars Q and Q;
  enddef;
  def map between dQH2_dt and Electron_flux_complex_I for
    vars QH2 and QH2;
    vars V_C1 and V_C1;
  enddef;
  def map between dH_x_dt and Electron_flux_complex_I for
    vars H_x and H_x;
    vars V_C1 and V_C1;
  enddef;
  def map between dNADH_x_dt and Electron_flux_complex_I for
    vars NADH_x and NADH_x;
    vars V_C1 and V_C1;
  enddef;
  def map between NAD_x_concentration and Electron_flux_complex_I for
    vars NAD_x and NAD_x;
  enddef;
  def map between Proton_motive_force and Electron_flux_complex_I for
    vars dG_H and dG_H;
  enddef;
  def map between dH_x_dt and Electron_flux_complex_III for
    vars H_x and H_x;
    vars V_C3 and V_C3;
  enddef;
  def map between Q_concentration and Electron_flux_complex_III for
    vars Q and Q;
  enddef;
  def map between dQH2_dt and Electron_flux_complex_III for
    vars QH2 and QH2;
    vars V_C3 and V_C3;
  enddef;
  def map between dPi_x_dt and Electron_flux_complex_III for
    vars Pi_x and Pi_x;
  enddef;
  def map between Cox_concentration and Electron_flux_complex_III for
    vars Cox and Cox;
  enddef;
  def map between dCred_dt and Electron_flux_complex_III for
    vars Cred and Cred;
    vars V_C3 and V_C3;
  enddef;
  def map between Adjustable_parameters and Electron_flux_complex_III for
    vars k_Pi3 and k_Pi3;
    vars k_Pi4 and k_Pi4;
    vars x_C3 and x_C3;
  enddef;
  def map between Fixed_parameters and Electron_flux_complex_III for
    vars dG_C3o and dG_C3o;
    vars F and F;
    vars RT and RT;
  enddef;
  def map between Fixed_parameters and Electron_flux_complex_IV for
    vars dG_C4o and dG_C4o;
    vars F and F;
    vars RT and RT;
    vars Ctot and Ctot;
  enddef;
  def map between Adjustable_parameters and Electron_flux_complex_IV for
    vars k_O2 and k_O2;
    vars x_C4 and x_C4;
  enddef;
  def map between dH_x_dt and Electron_flux_complex_IV for
    vars H_x and H_x;
    vars V_C4 and V_C4;
  enddef;
  def map between dO2_dt and Electron_flux_complex_IV for
    vars O2 and O2;
    vars V_C4 and V_C4;
  enddef;
  def map between Fixed_parameters and dO2_dt for
    vars W_i and W_i;
    vars W_x and W_x;
  enddef;
  def map between dCred_dt and Electron_flux_complex_IV for
    vars Cred and Cred;
    vars V_C4 and V_C4;
  enddef;
  def map between Cox_concentration and Electron_flux_complex_IV for
    vars Cox and Cox;
  enddef;
  def map between dPsi_dt and Electron_flux_complex_IV for
    vars dPsi and dPsi;
    vars V_C4 and V_C4;
  enddef;
  def map between Adjustable_parameters and ATP_synthesis_flux for
    vars x_F1 and x_F1;
  enddef;
  def map between Fixed_parameters and ATP_synthesis_flux for
    vars K_DD and K_DD;
    vars K_DT and K_DT;
    vars RT and RT;
    vars n_A and n_A;
    vars dG_F1o and dG_F1o;
  enddef;
  def map between Proton_motive_force and ATP_synthesis_flux for
    vars dG_H and dG_H;
  enddef;
  def map between mADPx and ATP_synthesis_flux for
    vars ADP_mx and ADP_mx;
  enddef;
  def map between mATPx and ATP_synthesis_flux for
    vars ATP_mx and ATP_mx;
  enddef;
  def map between dPi_x_dt and ATP_synthesis_flux for
    vars Pi_x and Pi_x;
    vars V_F1 and V_F1;
  enddef;
  def map between Adjustable_parameters and Dehydrogenase_flux for
    vars x_DH and x_DH;
    vars k_Pi1 and k_Pi1;
    vars k_Pi2 and k_Pi2;
    vars r and r;
  enddef;
  def map between Dehydrogenase_flux and NAD_x_concentration for
    vars NAD_x and NAD_x;
  enddef;
  def map between dNADH_x_dt and Dehydrogenase_flux for
    vars NADH_x and NADH_x;
    vars V_DH and V_DH;
  enddef;
  def map between dPi_x_dt and Dehydrogenase_flux for
    vars Pi_x and Pi_x;
  enddef;
  def map between Adjustable_parameters and ANT_flux for
    vars x_ANT and x_ANT;
    vars k_mADP and k_mADP;
  enddef;
  def map between Fixed_parameters and ANT_flux for
    vars F and F;
    vars RT and RT;
  enddef;
  def map between fATPx and ANT_flux for
    vars fATPx and ATP_fx;
  enddef;
  def map between fADPx and ANT_flux for
    vars fADPx and ADP_fx;
  enddef;
  def map between fATPi and ANT_flux for
    vars fATPi and ATP_fi;
  enddef;
  def map between fADPi and ANT_flux for
    vars fADPi and ADP_fi;
  enddef;
  def map between dPsi_dt and ANT_flux for
    vars dPsi and dPsi;
    vars V_ANT and V_ANT;
  enddef;
  def map between dH_x_dt and Phosphate_hydrogen_cotransporter_flux for
    vars H_x and H_x;
    vars V_Pi1 and V_Pi1;
  enddef;
  def map between Pii and Phosphate_hydrogen_cotransporter_flux for
    vars Pii and Pii;
    vars V_Pi1 and V_Pi1;
  enddef;
  def map between dPi_x_dt and Phosphate_hydrogen_cotransporter_flux for
    vars Pi_x and Pi_x;
    vars V_Pi1 and V_Pi1;
  enddef;
  def map between Fixed_parameters and Phosphate_hydrogen_cotransporter_flux for
    vars H_i and H_i;
    vars k_dHPi and k_dHPi;
  enddef;
  def map between Adjustable_parameters and Phosphate_hydrogen_cotransporter_flux for
    vars x_Pi1 and x_Pi1;
    vars k_PiH and k_PiH;
  enddef;
  def map between Adjustable_parameters and Hydrogen_leak_flux for
    vars x_Hle and x_Hle;
  enddef;
  def map between Fixed_parameters and Hydrogen_leak_flux for
    vars F and F;
    vars H_i and H_i;
    vars RT and RT;
  enddef;
  def map between dPsi_dt and Hydrogen_leak_flux for
    vars dPsi and dPsi;
    vars V_Hle and V_Hle;
  enddef;
  def map between dH_x_dt and Hydrogen_leak_flux for
    vars H_x and H_x;
    vars V_Hle and V_Hle;
  enddef;
  def map between Fixed_parameters and Potassium_hydrogen_flux for
    vars K_i and K_i;
    vars H_i and H_i;
  enddef;
  def map between Adjustable_parameters and Potassium_hydrogen_flux for
    vars x_KH and x_KH;
  enddef;
  def map between dK_x_dt and Potassium_hydrogen_flux for
    vars K_x and K_x;
    vars V_KH and V_KH;
  enddef;
  def map between dH_x_dt and Potassium_hydrogen_flux for
    vars H_x and H_x;
    vars V_KH and V_KH;
  enddef;
  def map between Fixed_parameters and Passive_potassium_flux for
    vars K_i and K_i;
    vars F and F;
    vars RT and RT;
  enddef;
  def map between Adjustable_parameters and Passive_potassium_flux for
    vars x_K and x_K;
  enddef;
  def map between dPsi_dt and Passive_potassium_flux for
    vars dPsi and dPsi;
    vars V_K and V_K;
  enddef;
  def map between dK_x_dt and Passive_potassium_flux for
    vars K_x and K_x;
    vars V_K and V_K;
  enddef;
  def map between Fixed_parameters and Adenylate_kinase_flux for
    vars K_AK and K_AK;
  enddef;
  def map between Adenylate_kinase_flux and Adjustable_parameters for
    vars x_AK and x_AK;
  enddef;
  def map between ADPi and Adenylate_kinase_flux for
    vars ADPi and ADPi;
    vars V_AKi and V_AKi;
  enddef;
  def map between AMPi and Adenylate_kinase_flux for
    vars AMPi and AMPi;
    vars V_AKi and V_AKi;
  enddef;
  def map between ATPi and Adenylate_kinase_flux for
    vars ATPi and ATPi;
    vars V_AKi and V_AKi;
  enddef;
  def map between Environment and dH_x_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dH_x_dt for
    vars n_A and n_A;
    vars W_x and W_x;
  enddef;
  def map between Adjustable_parameters and dH_x_dt for
    vars x_buff and x_buff;
  enddef;
  def map between Dehydrogenase_flux and dH_x_dt for
    vars V_DH and V_DH;
  enddef;
  def map between ATP_synthesis_flux and dH_x_dt for
    vars V_F1 and V_F1;
  enddef;
  def map between dK_x_dt and Environment for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dK_x_dt for
    vars W_x and W_x;
  enddef;
  def map between Environment and dNADH_x_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dNADH_x_dt for
    vars W_x and W_x;
  enddef;
  def map between Environment and dQH2_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dQH2_dt for
    vars W_x and W_x;
  enddef;
  def map between Environment and dCred_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dCred_dt for
    vars W_i and W_i;
  enddef;
  def map between Environment and dO2_dt for
    vars t and t;
  enddef;
  def map between Environment and dATP_x_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dATP_x_dt for
    vars W_x and W_x;
  enddef;
  def map between ATP_synthesis_flux and dATP_x_dt for
    vars V_F1 and V_F1;
  enddef;
  def map between dATP_x_dt and ANT_flux for
    vars V_ANT and V_ANT;
  enddef;
  def map between Environment and dADP_x_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dADP_x_dt for
    vars W_x and W_x;
  enddef;
  def map between ATP_synthesis_flux and dADP_x_dt for
    vars V_F1 and V_F1;
  enddef;
  def map between dADP_x_dt and ANT_flux for
    vars V_ANT and V_ANT;
  enddef;
  def map between dPi_x_dt and Environment for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dPi_x_dt for
    vars W_x and W_x;
  enddef;
  def map between Fixed_parameters and ATPi for
    vars W_i and W_i;
  enddef;
  def map between Fixed_parameters and ADPi for
    vars W_i and W_i;
  enddef;
  def map between ANT_flux and ADPi for
    vars V_ANT and V_ANT;
  enddef;
  def map between Fixed_parameters and AMPi for
    vars W_i and W_i;
  enddef;
  def map between Fixed_parameters and Pii for
    vars W_i and W_i;
  enddef;
  def map between Environment and dPsi_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dPsi_dt for
    vars n_A and n_A;
  enddef;
  def map between Electron_flux_complex_I and dPsi_dt for
    vars V_C1 and V_C1;
  enddef;
  def map between Electron_flux_complex_III and dPsi_dt for
    vars V_C3 and V_C3;
    vars dPsi and dPsi;
  enddef;
  def map between dPsi_dt and ATP_synthesis_flux for
    vars V_F1 and V_F1;
  enddef;
  def map between Fixed_parameters and NAD_x_concentration for
    vars NADtot and NADtot;
  enddef;
  def map between dNADH_x_dt and NAD_x_concentration for
    vars NADH_x and NADH_x;
  enddef;
  def map between Fixed_parameters and Q_concentration for
    vars Qtot and Qtot;
  enddef;
  def map between dQH2_dt and Q_concentration for
    vars QH2 and QH2;
  enddef;
  def map between Fixed_parameters and Cox_concentration for
    vars Ctot and Ctot;
  enddef;
  def map between dCred_dt and Cox_concentration for
    vars Cred and Cred;
  enddef;
  def map between Electron_flux_complex_III and Proton_motive_force for
    vars dG_H and dG_H;
  enddef;
  def map between Proton_motive_force and Electron_flux_complex_IV for
    vars dG_H and dG_H;
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre_per_s as
    unit micrometre;
    unit second {expo: -1};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit micromolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit kilojoule_per_mole_kelvin as
    unit joule {pref: kilo};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit kilojoule_per_mole_millivolt as
    unit joule {pref: kilo};
    unit mole {expo: -1};
    unit millivolt {expo: -1};
  enddef;
  def unit cell as base unit;
  def unit cytoplasm as base unit;
  def unit mitochondria as base unit;
  def unit mito_per_cell as
    unit mitochondria;
    unit cell {expo: -1};
  enddef;
  def unit l_water_per_l_mito as
    unit mitochondria {expo: -1};
  enddef;
  def unit mg_per_mitochondria as
    unit gram {pref: milli};
    unit mitochondria {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit liter {expo: -1};
  enddef;
  def unit micromolar as
    unit molar {pref: micro};
  enddef;
  def unit per_micromolar as
    unit micromolar {expo: -1};
  enddef;
  def unit micron_per_second as
    unit metre {pref: -6};
    unit second {expo: -1};
  enddef;
  def unit per_micron as
    unit metre {expo: -1, pref: -6};
    unit mitochondria {expo: -1};
  enddef;
  def unit kilojoule_per_mole as
    unit joule {pref: kilo};
    unit mole {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit kilojoule_per_mole_per_millivolt as
    unit kilojoule_per_mole;
    unit millivolt {expo: -1};
  enddef;
  def unit micromolar_per_mito as
    unit mole {pref: micro};
    unit liter {expo: -1};
    unit mitochondria {expo: -1};
  enddef;
  def unit micromole_per_second_per_l_mito as
    unit micromolar_per_mito;
    unit second {expo: -1};
  enddef;
  def unit micromole_per_second_per_l_mito_per_micromolar as
    unit micromole_per_second_per_l_mito;
    unit micromolar {expo: -1};
  enddef;
  def unit micromole_per_second_per_l_mito_per_micromolar_per_half_molar as
    unit micromole_per_second_per_l_mito_per_micromolar;
    unit micromolar {expo: -0.5};
  enddef;
  def unit micromole_per_second_per_l_mito_per_micromolar_per_micromolar as
    unit micromole_per_second_per_l_mito_per_micromolar;
    unit micromolar {expo: -1};
  enddef;
  def unit mole_per_l_mito_per_millivolt as
    unit micromolar_per_mito;
    unit millivolt {expo: -1};
  enddef;
  def unit micromole_per_second_per_l_mito_per_micromolar_per_millivolt as
    unit micromole_per_second_per_l_mito_per_micromolar;
    unit millivolt {expo: -1};
  enddef;
enddef;
